PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '', 'experimenter': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = CDAT
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextboxComponent CDATresponse
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent nextrialbutton
      bold = True
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -.4)
      size = (0.14, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Next
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    TextComponent question
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $questions_cdat
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    TextComponent counter
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordcount_cdat
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  Routine questionselection
    CodeComponent questioncode
      Code Type = Py
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      Begin Routine:
        import random
        presheetRowIndex = random.randint(2,11)
        sheetRowIndex = str(presheetRowIndex)
        print(sheetRowIndex)
  Routine blckscreen
    TextComponent interval
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine introCDAT
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome!

        In this experiment a sentence will be presented and your task is to write ten nouns (english words only) which categorically fits it. After writing each word, click on "Next" for advancing to the next trial.

        Press "Enter" to begin
    KeyboardComponent introcdat_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine blckscrn
    TextComponent endblckscrn
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine farewellCDAT
    TextComponent fartext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text [set every repeat]:
        End of task

        Thank you for participating!
Flow
  Routine introCDAT
  Routine questionselection
  LoopInitiator questionCDAT loopType="TrialHandler"
    Selected rows = $sheetRowIndex
    conditionsFile = questionsCDAT.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'questions_cdat': 'Something that can be closed:'},
      {'questions_cdat': 'Something that protects from the rain:'},
      {'questions_cdat': 'Something that is cyclic:'},
      {'questions_cdat': 'Something that is flexible:'},
      {'questions_cdat': 'Something that is noisy:'},
      {'questions_cdat': 'Something that is slow:'},
      {'questions_cdat': 'Something that can be opened:'},
      {'questions_cdat': 'Something that you can enter in:'},
      {'questions_cdat': 'Something that can grasp objects:'},
      {'questions_cdat': 'Something that can be broken:'}]
    LoopInitiator responsesCDAT loopType="TrialHandler"
      conditionsFile = conditions_trials_CDAT.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'wordcount_cdat': 'Number of words inserted: 0/10'},
        {'wordcount_cdat': 'Number of words inserted: 1/10'},
        {'wordcount_cdat': 'Number of words inserted: 2/10'},
        {'wordcount_cdat': 'Number of words inserted: 3/10'},
        {'wordcount_cdat': 'Number of words inserted: 4/10'},
        {'wordcount_cdat': 'Number of words inserted: 5/10'},
        {'wordcount_cdat': 'Number of words inserted: 6/10'},
        {'wordcount_cdat': 'Number of words inserted: 7/10'},
        {'wordcount_cdat': 'Number of words inserted: 8/10'},
        {'wordcount_cdat': 'Number of words inserted: 9/10'}]
      Routine blckscreen
      Routine trial
    LoopTerminator responsesCDAT
  LoopTerminator questionCDAT
  Routine blckscrn
  Routine farewellCDAT
