PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '', 'experimenter': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = CPT
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixationcross
      fillColor = white
      lineWidth [set every repeat] = 0.1
      saveStartStop = False
      shape = cross
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $img_filename
      pos = (0, 0.1)
      saveStartStop = False
      size = None
      startVal [time (s)] = 3.0
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    KeyboardComponent responseCPT
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corransCPT
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
      store = first key
      storeCorrect = True
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    TextComponent imglabel
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3.0
      text [set every repeat] = $img_trial_label
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  Routine labelselect1
  Routine condselect_2
  Routine labelselect
    CodeComponent labelcode
      Code Type = Auto->JS
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      Begin Routine:
        trialcondsel = condslist[condcounter]
        condcounter=condcounter+1

        corransCPT = 'm'

        if trialcondsel=="incongruent":
          corransCPT = 'z'
          labelsprelist = open("incongruentlabels.txt", "r")
          labelsprelist2 = labelsprelist.read().splitlines()
          labelsprelist.close()
          labelslist = sorted(labelsprelist2, key=str.lower)

          import random
          incongruentlabel=random.choice(labelslist)

          while incongruentlabel==img_trial_label:
            incongruentlabel = random.choice(labelslist)


          img_trial_label = incongruentlabel
  Routine condselect2
    CodeComponent condcode2
      Code Type = Auto->JS
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      Begin Routine:
        trialcondsel = condslist[condcounter]
        condcounter=condcounter+1
  Routine condselect2_2
  Routine condsort
    CodeComponent condcode
      Code Type = Auto->JS
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      Begin Routine:
        congcond = ["congruent"]
        incongcond = ["incongruent"]
        condslist = congcond*15
        inconglist = incongcond*15
        for i in inconglist:
            condslist.append(i)

        import random
        random.shuffle(condslist)
        condcounter=0
  Routine intro
    TextComponent introtext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome!

        In this experiment an image and a label will be presented on the screen. You need to answer if the label is congruent with the image or not.  Use "M" for answering "yes" and "Z" for "no".

        Press "Enter" to begin
    KeyboardComponent intro_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine blckscrn
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine farewellCPT
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        End of task

        Thank you for participating!
Flow
  Routine intro
  Routine condsort
  LoopInitiator trialimage loopType="TrialHandler"
    conditionsFile = CPT_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'img_filename': 'mooney_images/ant.jpg', 'img_trial_label': 'ant'},
      {'img_filename': 'mooney_images/bear1.jpg', 'img_trial_label': 'bear'},
      {'img_filename': 'mooney_images/bear2.jpg', 'img_trial_label': 'bear'},
      {'img_filename': 'mooney_images/cat1.jpg', 'img_trial_label': 'cat'},
      {'img_filename': 'mooney_images/cat2.jpg', 'img_trial_label': 'cat'},
      {'img_filename': 'mooney_images/cricket.jpg', 'img_trial_label': 'cricket'},
      {'img_filename': 'mooney_images/cow.jpg', 'img_trial_label': 'cow'},
      {'img_filename': 'mooney_images/cicada.jpg', 'img_trial_label': 'cicada'},
      {'img_filename': 'mooney_images/dog1.jpg', 'img_trial_label': 'dog'},
      {'img_filename': 'mooney_images/dog2.jpg', 'img_trial_label': 'dog'},
      {'img_filename': 'mooney_images/elephant.jpg', 'img_trial_label': 'elephant'},
      {'img_filename': 'mooney_images/fish.jpg', 'img_trial_label': 'fish'},
      {'img_filename': 'mooney_images/frog.jpg', 'img_trial_label': 'frog'},
      {'img_filename': 'mooney_images/goat.jpg', 'img_trial_label': 'goat'},
      {'img_filename': 'mooney_images/gorilla.jpg', 'img_trial_label': 'gorilla'},
      {'img_filename': 'mooney_images/hummingbird.jpg', 'img_trial_label': 'hummingbird'},
      {'img_filename': 'mooney_images/jaguar.jpg', 'img_trial_label': 'jaguar'},
      {'img_filename': 'mooney_images/owl.jpg', 'img_trial_label': 'owl'},
      {'img_filename': 'mooney_images/penguin.jpg', 'img_trial_label': 'penguin'},
      {'img_filename': 'mooney_images/person1.jpg', 'img_trial_label': 'person'},
      {'img_filename': 'mooney_images/person2.jpg', 'img_trial_label': 'person'}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
    Routine labelselect
    Routine trial
  LoopTerminator trialimage
  Routine blckscrn
  Routine farewellCPT
