PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '', 'experimenter': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = FDAT
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextboxComponent CDATresponse
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent nextrialbutton
      bold = True
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -.4)
      save = first click
      size = (0.14, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Next
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    TextComponent counter
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $wordcount_cdat
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  Routine questionselection
    CodeComponent questioncode
      Code Type = Py
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      Begin Routine:
        import random
        presheetRowIndex = random.randint(2,11)
        sheetRowIndex = str(presheetRowIndex)
        print(sheetRowIndex)
  Routine introFDAT
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment your task is to write ten nouns (only english words) which are as semantically distant as possible. After writing each word, click on the "Next" button to proceed to the following trial. Do not use proper nouns and/or technical terms

        Random words will be briefly presented on the screen as distractors

        Press "Enter" to Begin
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine farewellFDAT
    TextComponent faretxt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        End of task

        Thank you for participating!
  Routine primwords
    TextComponent interval
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent primword1
      letterHeight = 0.04
      pos = (0.1, 0.1)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd1
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    TextComponent primword2
      letterHeight = 0.04
      pos = (-0.1, 0.1)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd2
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    TextComponent primword3
      letterHeight = 0.04
      pos = (0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd3
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    TextComponent primword4
      letterHeight = 0.04
      pos = (-0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd4
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  Routine primwordselec
    CodeComponent primwordscode
      Code Type = Auto->JS
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      Begin Routine:
        wordsprelist1 = open("wordsFDAT.txt", "r")
        wordsprelist2 = wordsprelist1.read().splitlines()
        wordsprelist1 .close()
        wordslist = sorted(wordsprelist2, key=str.lower)

        import random
        randprimwords = random.sample(wordslist, 4)

        import numpy as np
        prmwrd1 = randprimwords[0]
        prmwrd2 = randprimwords[1]
        prmwrd3 = randprimwords[2]
        prmwrd4 = randprimwords[3]
  Routine blckscrn
    TextComponent blckscrntxt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine introFDAT
  LoopInitiator responsesCDAT loopType="TrialHandler"
    conditionsFile = trials_FDAT.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'wordcount_cdat': 'Number of words already inserted: 0/10'},
      {'wordcount_cdat': 'Number of words already inserted: 1/10'},
      {'wordcount_cdat': 'Number of words already inserted: 2/10'},
      {'wordcount_cdat': 'Number of words already inserted: 3/10'},
      {'wordcount_cdat': 'Number of words already inserted: 4/10'},
      {'wordcount_cdat': 'Number of words already inserted: 5/10'},
      {'wordcount_cdat': 'Number of words already inserted: 6/10'},
      {'wordcount_cdat': 'Number of words already inserted: 7/10'},
      {'wordcount_cdat': 'Number of words already inserted: 8/10'},
      {'wordcount_cdat': 'Number of words already inserted: 9/10'}]
    Routine primwordselec
    Routine primwords
    Routine trial
  LoopTerminator responsesCDAT
  Routine blckscrn
  Routine farewellFDAT
