PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '', 'experimenter': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = FPT
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixationcross
      fillColor = white
      lineWidth [set every repeat] = 0.1
      saveStartStop = False
      shape = cross
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent primword1
      letterHeight = 0.05
      pos = (0.1, 0.1)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd1
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    TextComponent primword2
      letterHeight = 0.05
      pos = (-0.1, 0.1)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd2
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    TextComponent primword3
      letterHeight = 0.05
      pos = (0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd3
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    TextComponent primword4
      letterHeight = 0.05
      pos = (-0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prmwrd4
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    ImageComponent image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $img_filename
      saveStartStop = False
      size = None
      startVal [time (s)] = 4.0
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    KeyboardComponent responseFPT
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corransFPT
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4.0
      store = first key
      storeCorrect = True
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  Routine introPT
    TextComponent introtext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment ambiguous images will be presented and your task is to answer if you can detect any pattern in it. Use the "M" key to answer "yes" and "Z" for "no".

        Random words will be presented as distractors.

        Press "Enter" to begin
    KeyboardComponent intro_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine farewellPT
    TextComponent endtext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        End of task

        Thank you for participating!
  Routine blckscreen
    TextComponent blckscrn
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine primwordselec
    CodeComponent primcode
      Code Type = Auto->JS
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      Begin Routine:
        wordsprelist1 = open("wordsFPT.txt", "r")
        wordsprelist2 = wordsprelist1.read().splitlines()
        wordsprelist1 .close()
        wordslist = sorted(wordsprelist2, key=str.lower)

        import random
        randprimwords = random.sample(wordslist, 4)

        import numpy as np
        prmwrd1 = randprimwords[0]
        prmwrd2 = randprimwords[1]
        prmwrd3 = randprimwords[2]
        prmwrd4 = randprimwords[3]

        corransFPT = 'm'
Flow
  Routine introPT
  LoopInitiator trialimage loopType="TrialHandler"
    conditionsFile = conditionsFPTimages.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'img_filename': 'mooney_images/ant.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/bear1.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/bear2.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/cat1.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/cat2.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/cricket.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/cow.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/cicada.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/dog1.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/dog2.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/elephant.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/fish.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/frog.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/goat.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/gorilla.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/hummingbird.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/jaguar.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/owl.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/penguin.jpg', 'img_condition': 'standard'},
      {'img_filename': 'mooney_images/person1.jpg', 'img_condition': 'standard'}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
    Routine primwordselec
    Routine trial
  LoopTerminator trialimage
  Routine blckscreen
  Routine farewellPT
